<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>RedPort</osc:Name>
          <osc:Port>27020</osc:Port>
          <osc:RemoteHostName>localhost</osc:RemoteHostName>
          <osc:RemotePort>27020</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>GreenPort</osc:Name>
          <osc:Port>27022</osc:Port>
          <osc:RemoteHostName>localhost</osc:RemoteHostName>
          <osc:RemotePort>27022</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Split" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Green</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item3</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>64</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>0.5</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>Red</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item3</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>56</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Size</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(single(Item1.X / Item3.Width) as GreenX, single(Item1.Y / Item3.Height) as GreenY, single(Item2.X / Item3.Width) as RedX,
 single(Item2.Y / Item3.Height) as RedY, single(Item3.Height) as Height, single(Item3.Width) as Width)</scr:Expression>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>RedX,RedY,Height,Width</Selector>
      </Expression>
      <Expression xsi:type="osc:SendMessage">
        <osc:Connection>RedPort</osc:Connection>
        <osc:Address>/red</osc:Address>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>GreenX,GreenY,Width,Height</Selector>
      </Expression>
      <Expression xsi:type="osc:SendMessage">
        <osc:Connection>GreenPort</osc:Connection>
        <osc:Address>/green</osc:Address>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="2" To="16" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="10" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="17" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="17" Label="Source2" />
      <Edge From="16" To="17" Label="Source3" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="21" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>