<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>osc_client</osc:Name>
          <osc:Port>27020</osc:Port>
          <osc:RemoteHostName>localhost</osc:RemoteHostName>
          <osc:RemotePort>27020</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FunctionGenerator">
          <dsp:BufferLength>1</dsp:BufferLength>
          <dsp:Frequency>0.1</dsp:Frequency>
          <dsp:Waveform>Sine</dsp:Waveform>
          <dsp:SampleRate>30</dsp:SampleRate>
          <dsp:Amplitude>100</dsp:Amplitude>
          <dsp:Offset>200</dsp:Offset>
          <dsp:Phase>1.57</dsp:Phase>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Convert.ToSingle(it) / 500</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FunctionGenerator">
          <dsp:BufferLength>1</dsp:BufferLength>
          <dsp:Frequency>0.1</dsp:Frequency>
          <dsp:Waveform>Sine</dsp:Waveform>
          <dsp:SampleRate>30</dsp:SampleRate>
          <dsp:Amplitude>100</dsp:Amplitude>
          <dsp:Offset>200</dsp:Offset>
          <dsp:Phase>0</dsp:Phase>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Sum" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Convert.ToSingle(it) / 500</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>500</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>500</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="osc:SendMessage">
        <osc:Connection>osc_client</osc:Connection>
        <osc:Address>/red</osc:Address>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="11" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="9" Label="Source1" />
      <Edge From="5" To="10" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="11" Label="Source2" />
      <Edge From="9" To="11" Label="Source3" />
      <Edge From="10" To="11" Label="Source4" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>